PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1792, 1120]
  expName = untitled
  keyboardBackend = Pyglet
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    TextboxComponent textbox_1
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $sentence
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  Routine task1
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  Routine task2
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $sentence
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  Routine task3
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $sentence
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = sentiment_labels_task1.xlsx
    loopType = random
    nReps = 5
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    conditions:
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      {'sentence_id': 292, 'sentence': 'Both the crime story and the love story are unusual.'},
      {'sentence_id': 293, 'sentence': "It's never a good sign when a film's star spends the entirety of the film in a coma."},
      {'sentence_id': 294, 'sentence': 'A creaky staircase gothic.'},
      {'sentence_id': 295, 'sentence': "If there's a way to effectively teach kids about the dangers of drugs, I think it's in projects like the (unfortunately R-rated) Paid."},
      {'sentence_id': 296, 'sentence': "If you're a WWF fan, or you related to the people who watched the robots getting butchered in A.I., you'll probably like Rollerball."},
      {'sentence_id': 297, 'sentence': 'Norton holds the film together.'},
      {'sentence_id': 298, 'sentence': 'A breathtaking adventure for all ages, Spirit tells its poignant and uplifting story in a stunning fusion of music and images.'},
      {'sentence_id': 299, 'sentence': "It won't bust your gut -- and it's not intended to -- it's merely a blandly cinematic surgical examination of what makes a joke a joke."},
      {'sentence_id': 300, 'sentence': 'Largely a for-fans artifact.'},
      {'sentence_id': 301, 'sentence': 'A movie so bad that it quickly enters the pantheon of wreckage that includes Battlefield Earth and Showgirls.'},
      {'sentence_id': 302, 'sentence': "If you're over 25, have an IQ over 90, and have a driver's license, you should be able to find better entertainment."},
      {'sentence_id': 303, 'sentence': 'A solid piece of journalistic work that draws a picture of a man for whom political expedience became a deadly foreign policy.'},
      {'sentence_id': 304, 'sentence': 'The doofus-on-the-loose banter of Welcome to Collinwood has a cocky, after-hours loopiness to it.'},
      {'sentence_id': 305, 'sentence': "It's the funniest American comedy since Graffiti Bridge."},
      {'sentence_id': 306, 'sentence': 'Samuel Beckett applied to the Iranian voting process.'},
      {'sentence_id': 307, 'sentence': 'A strangely compelling and brilliantly acted psychological drama.'},
      {'sentence_id': 308, 'sentence': "Often gruelling and heartbreaking to witness, but Seldahl and Wollter's sterling performances raise this far above the level of the usual maudlin disease movie."},
      {'sentence_id': 309, 'sentence': 'This enthralling documentary... is at once playful and haunting, an in-depth portrait of an iconoclastic artist who was fundamentally unknowable even to his closest friends.'},
      {'sentence_id': 310, 'sentence': "I didn't laugh at the ongoing efforts of Cube, and his skinny buddy Mike Epps, to make like Laurel and Hardy'n the hood."},
      {'sentence_id': 311, 'sentence': 'At its best when the guarded, resentful Betty and the manipulative yet needy Margot are front and center.'},
      {'sentence_id': 312, 'sentence': 'Ford deserves to be remembered at Oscar time for crafting this wonderful portrait of a conflicted soldier.'},
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    Routine trial
  LoopTerminator trials
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = sentiment_labels_task1.xlsx
    loopType = random
    nReps = 5
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    conditions:
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      {'sentence_id': 292, 'sentence': 'Both the crime story and the love story are unusual.'},
      {'sentence_id': 293, 'sentence': "It's never a good sign when a film's star spends the entirety of the film in a coma."},
      {'sentence_id': 294, 'sentence': 'A creaky staircase gothic.'},
      {'sentence_id': 295, 'sentence': "If there's a way to effectively teach kids about the dangers of drugs, I think it's in projects like the (unfortunately R-rated) Paid."},
      {'sentence_id': 296, 'sentence': "If you're a WWF fan, or you related to the people who watched the robots getting butchered in A.I., you'll probably like Rollerball."},
      {'sentence_id': 297, 'sentence': 'Norton holds the film together.'},
      {'sentence_id': 298, 'sentence': 'A breathtaking adventure for all ages, Spirit tells its poignant and uplifting story in a stunning fusion of music and images.'},
      {'sentence_id': 299, 'sentence': "It won't bust your gut -- and it's not intended to -- it's merely a blandly cinematic surgical examination of what makes a joke a joke."},
      {'sentence_id': 300, 'sentence': 'Largely a for-fans artifact.'},
      {'sentence_id': 301, 'sentence': 'A movie so bad that it quickly enters the pantheon of wreckage that includes Battlefield Earth and Showgirls.'},
      {'sentence_id': 302, 'sentence': "If you're over 25, have an IQ over 90, and have a driver's license, you should be able to find better entertainment."},
      {'sentence_id': 303, 'sentence': 'A solid piece of journalistic work that draws a picture of a man for whom political expedience became a deadly foreign policy.'},
      {'sentence_id': 304, 'sentence': 'The doofus-on-the-loose banter of Welcome to Collinwood has a cocky, after-hours loopiness to it.'},
      {'sentence_id': 305, 'sentence': "It's the funniest American comedy since Graffiti Bridge."},
      {'sentence_id': 306, 'sentence': 'Samuel Beckett applied to the Iranian voting process.'},
      {'sentence_id': 307, 'sentence': 'A strangely compelling and brilliantly acted psychological drama.'},
      {'sentence_id': 308, 'sentence': "Often gruelling and heartbreaking to witness, but Seldahl and Wollter's sterling performances raise this far above the level of the usual maudlin disease movie."},
      {'sentence_id': 309, 'sentence': 'This enthralling documentary... is at once playful and haunting, an in-depth portrait of an iconoclastic artist who was fundamentally unknowable even to his closest friends.'},
      {'sentence_id': 310, 'sentence': "I didn't laugh at the ongoing efforts of Cube, and his skinny buddy Mike Epps, to make like Laurel and Hardy'n the hood."},
      {'sentence_id': 311, 'sentence': 'At its best when the guarded, resentful Betty and the manipulative yet needy Margot are front and center.'},
      {'sentence_id': 312, 'sentence': 'Ford deserves to be remembered at Oscar time for crafting this wonderful portrait of a conflicted soldier.'},
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    Routine task2
  LoopTerminator trials_3
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = relations_labels_task3.xlsx
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials_2
